OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 30
-> Time based epoching
  Epoch duration (in sec) = 3
  Epoch intervals (in sec) = 2
-> Simple DSP => #3
  Equation = x
-> Signal average
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Input stream=#3 -> CSV File Writer
  Filename = C:/Users/SM-PC/Desktop/졸업프로젝트/openvibe_rawdata/record-[$core{date}-$core{time}].csv
  Precision = 10
  Append data = false
  Only last matrix = false
Data=#3 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input signal=#3 -> LSL Export
  Signal stream = LSLExampleAmp
  Marker stream = openvibeMarkers
#0.Signal stream -> Simple DSP => #9
  Equation = x
LSL Communication => #10
  Output 1 Stream Name = o1ov
-> Stimulation listener
  Log level to use = Information
Data=#9, Stimulations=#10 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

Channel Selector "16:17"
  Channel List = 16:17
  Action = Select
  Channel Matching Method = Smart

GDF file writer
  Filename = record-[$core{date}-$core{time}].gdf
